PsychoPy2experiment version="1.85.3"
Settings
  Monitor = testMonitor
  color = black
  Experiment info = {'participant':'', 'gender (m/f)':'', 'age':'', 'session':03}
  Units = use prefs
  Save psydat file = False
  Window size (pixels) = [1680, 1050]
  Full-screen window = True
  Data filename = u'data' + os.sep + '%s_%s' % (expInfo['participant'], expInfo['date'])
  expName = gabore
  logging level = warning
  Screen = 1
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Routines
  Routine trial
    ImageComponent stimulus
      stopVal [duration (s)] = 7.0
      mask = none
      pos [set every repeat] = $[0, offset]
      units = pix
      startVal [time (s)] = 0.0
      image [set every repeat] = 'images/'+$image
      size = [200,200]
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    KeyboardComponent resp
      correctAns = $corrAns
      stopVal [duration (s)] = 7.0
      forceEndRoutine = True
      allowedKeys = 's', 'h'
      startVal [time (s)] = 0.0
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  Routine instrMain
    TextComponent instr2
      startVal [time (s)] = 0.0
      letterHeight = 0.075
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      text:
        OK, ready to start the main experiment?

        Remember, press;
         - 'S' if the SMALL letters are S
         - 'H' if the SMALL letters are H

        Try to respond as quickly and as accurately as possible.

        When you are ready to proceed press any key.
    KeyboardComponent ok2
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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  Routine thanks
    TextComponent thanksMsg
      text = You're done! Fun, wasn't it!? ;-)
      stopVal [duration (s)] = 2.0
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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  Routine instrPractice
    TextComponent instruct1
      startVal [time (s)] = 0.0
      letterHeight = 0.075
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      text:
        In this experiment you will be presented with a large letter made up of smaller letters. Your task is to

        Respond by pressing;
         - 'S' if the SMALL letters are S
         - 'H' if the SMALL letters are H

        Try to respond as quickly and as accurately as possible.

        There will be a number of practice trials in which you will be given feedback.

        Press any key when you are ready to proceed.
    KeyboardComponent ok1
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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Flow
  Routine instrPractice
  LoopInitiator practiceTrials loopType="TrialHandler"
    conditionsFile = conditions.xlsx
    loopType = random
    nReps = 1
    endPoints = [1, 2]
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    conditions:
      [{u'screenpixelsize': 0.282, u'fieldwidth': 100, u'downsampledfieldwidth': 0, u'flankdistance': 2, u'image': u'gabore-02-02.png', u'offset': 0, u'viewing_distance': 12, u'sd': 2, u'sigma': 0.012, u'K': 4.6, u'fieldheight': 10, u'downsampledfield_height': 0},
      {u'screenpixelsize': 0.282, u'fieldwidth': 100, u'downsampledfieldwidth': 0, u'flankdistance': 2, u'image': u'gabore-02-02.png', u'offset': 5, u'viewing_distance': 12, u'sd': 2, u'sigma': 0.012, u'K': 4.6, u'fieldheight': 10, u'downsampledfield_height': 0},
      {u'screenpixelsize': 0.282, u'fieldwidth': 100, u'downsampledfieldwidth': 0, u'flankdistance': 2, u'image': u'gabore-02-02.png', u'offset': 10, u'viewing_distance': 12, u'sd': 2, u'sigma': 0.012, u'K': 4.6, u'fieldheight': 10, u'downsampledfield_height': 0},
      {u'screenpixelsize': 0.282, u'fieldwidth': 100, u'downsampledfieldwidth': 0, u'flankdistance': 40, u'image': u'gabore-02-40.png', u'offset': 0, u'viewing_distance': 12, u'sd': 2, u'sigma': 0.012, u'K': 4.6, u'fieldheight': 10, u'downsampledfield_height': 0},
      {u'screenpixelsize': 0.282, u'fieldwidth': 100, u'downsampledfieldwidth': 0, u'flankdistance': 40, u'image': u'gabore-02-40.png', u'offset': 5, u'viewing_distance': 12, u'sd': 2, u'sigma': 0.012, u'K': 4.6, u'fieldheight': 10, u'downsampledfield_height': 0}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
    Routine trial
  LoopTerminator practiceTrials
  Routine instrMain
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = conditions.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{u'screenpixelsize': 0.282, u'fieldwidth': 100, u'downsampledfieldwidth': 0, u'flankdistance': 2, u'image': u'gabore-02-02.png', u'offset': 0, u'viewing_distance': 12, u'sd': 2, u'sigma': 0.012, u'K': 4.6, u'fieldheight': 10, u'downsampledfield_height': 0},
      {u'screenpixelsize': 0.282, u'fieldwidth': 100, u'downsampledfieldwidth': 0, u'flankdistance': 2, u'image': u'gabore-02-02.png', u'offset': 5, u'viewing_distance': 12, u'sd': 2, u'sigma': 0.012, u'K': 4.6, u'fieldheight': 10, u'downsampledfield_height': 0},
      {u'screenpixelsize': 0.282, u'fieldwidth': 100, u'downsampledfieldwidth': 0, u'flankdistance': 2, u'image': u'gabore-02-02.png', u'offset': 10, u'viewing_distance': 12, u'sd': 2, u'sigma': 0.012, u'K': 4.6, u'fieldheight': 10, u'downsampledfield_height': 0},
      {u'screenpixelsize': 0.282, u'fieldwidth': 100, u'downsampledfieldwidth': 0, u'flankdistance': 40, u'image': u'gabore-02-40.png', u'offset': 0, u'viewing_distance': 12, u'sd': 2, u'sigma': 0.012, u'K': 4.6, u'fieldheight': 10, u'downsampledfield_height': 0},
      {u'screenpixelsize': 0.282, u'fieldwidth': 100, u'downsampledfieldwidth': 0, u'flankdistance': 40, u'image': u'gabore-02-40.png', u'offset': 5, u'viewing_distance': 12, u'sd': 2, u'sigma': 0.012, u'K': 4.6, u'fieldheight': 10, u'downsampledfield_height': 0}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
    Routine trial
  LoopTerminator trials
  Routine thanks
